PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = oddball
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Routines
  Routine oddball
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        from numpy.random import uniform

        text_duration = .05 + uniform() * .1
        x = 1.3 + uniform() * .5
      End Routine:
        thisExp.addData('text_duration', text_duration)
    TextComponent text_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_duration
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      text [set every frame]:
        $rune
    ImageComponent image
      image [set every repeat] = $photo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent blank_screen
      size = (0.5, 0.5)
      startVal [time (s)] = $text_duration
      stopVal [duration (s)] = $x
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  Routine intro
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Witaj w naszym eksperymencie!
    TextComponent countdown5
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        Próba rozpocznie się za 5
    TextComponent countdown4
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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      text:
        Próba rozpocznie się za 4
    TextComponent countdown3
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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      text:
        Próba rozpocznie się za 3
    TextComponent countdown2
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
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      text:
        Próba rozpocznie się za 2
    TextComponent countdown1
      letterHeight = 0.1
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
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      text:
        Próba rozpocznie się za 1
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('photo', 'images/img1.png'), ('prob', 0.8), ('rune', 'ᚦ')]),
      OrderedDict([('photo', 'images/img2.png'), ('prob', 0.8), ('rune', 'ᚧ')]),
      OrderedDict([('photo', 'images/img2.png'), ('prob', 0.8), ('rune', 'ᚧ')]),
      OrderedDict([('photo', 'images/img2.png'), ('prob', 0.8), ('rune', 'ᚧ')]),
      OrderedDict([('photo', 'images/img2.png'), ('prob', 0.8), ('rune', 'ᚧ')]),
      OrderedDict([('photo', 'images/img2.png'), ('prob', 0.8), ('rune', 'ᚧ')])]
    Routine oddball
  LoopTerminator trials
